PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001', 'im_size': '512', 'postmask': '2'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  color = $[-1.000,-1.000,-1.000]
  expName = test
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Routines
  Routine present_gabor
    TextComponent print_spatial_freq
      disabled = True
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duration
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      text [set every repeat]:
        $f'''op = {opacity},ori = {orientation},
        sf = {spatial_freq:.2f},mask = {mask}
        ct = {contrast:.3f},dur = {duration:.2f}'''
    GratingComponent target
      interpolate = nearest
      mask [set every repeat] = $mask
      opacity = 1.
      ori [set every repeat] = $orientation
      phase = 0
      sf [set every repeat] = $spatial_freq
      size [set every repeat] = (int(expInfo['im_size']), int(expInfo['im_size']))
      startVal [time (s)] = 0
      stopVal [duration (s)] = $duration
      tex = sin
      units = pix
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    TextComponent stim_mask_gap
      letterHeight = 0.1
      startVal [condition] = $target.status == FINISHED
      stopVal [duration (s)] = $gap_dur
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    CodeComponent change_contrast
      Code Type = Py
      Begin Experiment:
        im_size = int(expInfo['im_size'])

        postmask = int(expInfo['postmask'])
      Begin Routine:
        target.contrast = contrast
        #gabor_tex = (
        #visual.filters.makeGrating(res = im_size,
        #    cycles = im_size * spatial_freq) *
        #visual.filters.makeMask(matrixSize = im_size,
        #        shape = 'gauss',range=[0,.01]))
        #grating.tex = gabor_tex
        #grating.tex = np.random.random([im_size,im_size])*2. - 1.

        #np.random.shuffle(mask_directions)
        #INITIALISE SOME STIMULI
        #grating1 = visual.GratingStim(win, mask="gauss",
        #                              color=[1.0, 1.0, 1.0],
        #                              opacity=1.0,
        #                              size=(im_size, im_size),
        #                              units = 'pix',
        #                              sf=(0.02,0), ori=mask_directions[0])

        #grating2 = visual.GratingStim(win, mask="gauss",
        #                              color=[1.0, 1.0, 1.0],
        #                              opacity=0.5,
        #                              size=(im_size, im_size),
        #                              units = 'pix',
        #                              sf=(.02,0), ori=mask_directions[1])
        ring = visual.RadialStim(
            win=win, name='ring',
            tex='sqrXsqr', mask = 'circle',
            size = (int(im_size/2),int(im_size/2)),units = 'pix',ori = 90,
            angularCycles = 0,radialCycles = 8,)
      End Routine:
        trialClock = core.Clock()
        t = 0
        while t < postmask:    # quits after some secs

            t = trialClock.getTime()

            ring.draw()

            win.flip()          #update the screen

            #handle key presses each frame
            for keys in event.getKeys():
                if keys in ['escape','q']:
                    core.quit()
  Routine response
    KeyboardComponent left_right
      allowedKeys = 'left','right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      storeCorrect = True
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    TextComponent message
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = <->
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  Routine visibility
    KeyboardComponent visible
      allowedKeys = '1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = ?
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  Routine introduction
    TextComponent intro
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        you will be asked "left" or "right" by pressing "<-" or "->"

        you will be asked visibility:
            1. unconscious
            2. glimpse
            3. conscious

        press "space" to start.
    KeyboardComponent to_start
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine introduction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = experiment.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('contrast', 1.0), ('mask', 'circle'), ('opacity', 1.0), ('orientation', -49), ('spatial_freq', 256.0), ('duration', 60), ('corrAns', 'left')]),
      OrderedDict([('contrast', 1.0), ('mask', 'circle'), ('opacity', 1.0), ('orientation', -49), ('spatial_freq', 320.0), ('duration', 60), ('corrAns', 'left')]),
      OrderedDict([('contrast', 1.0), ('mask', 'circle'), ('opacity', 1.0), ('orientation', -49), ('spatial_freq', 384.0), ('duration', 60), ('corrAns', 'left')]),
      OrderedDict([('contrast', 1.0), ('mask', 'circle'), ('opacity', 1.0), ('orientation', -49), ('spatial_freq', 448.0), ('duration', 60), ('corrAns', 'left')]),
      OrderedDict([('contrast', 1.0), ('mask', 'circle'), ('opacity', 1.0), ('orientation', -49), ('spatial_freq', 512.0), ('duration', 60), ('corrAns', 'left')]),
      OrderedDict([('contrast', 1.0), ('mask', 'circle'), ('opacity', 1.0), ('orientation', -48), ('spatial_freq', 256.0), ('duration', 60), ('corrAns', 'left')]),
      OrderedDict([('contrast', 1.0), ('mask', 'circle'), ('opacity', 1.0), ('orientation', -48), ('spatial_freq', 320.0), ('duration', 60), ('corrAns', 'left')]),
      OrderedDict([('contrast', 1.0), ('mask', 'circle'), ('opacity', 1.0), ('orientation', -48), ('spatial_freq', 384.0), ('duration', 60), ('corrAns', 'left')]),
      OrderedDict([('contrast', 1.0), ('mask', 'circle'), ('opacity', 1.0), ('orientation', -48), ('spatial_freq', 448.0), ('duration', 60), ('corrAns', 'left')])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
    Routine present_gabor
    Routine response
    Routine visibility
  LoopTerminator trials
