PsychoPy2experiment version="1.85.1"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = visual search
  Screen = 1
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Routines
  Routine instruction
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        gabor
        up = same
        left = left
        right = right
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 1
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  Routine experiment
    TextComponent Fixation
      text = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    GratingComponent target
      tex = sin
      stopVal [duration (s)] = 1.0
      mask = circle
      pos = (-0.5, 0)
      ori [set every repeat] = gabor
      startVal [time (s)] = 0.0
      sf = [4,5]
      size = (0.5, 0.5)
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    GratingComponent original
      tex = sin
      stopVal [duration (s)] = 1.0
      mask = circle
      pos = (0.5, 0)
      ori [set every repeat] = conditions
      startVal [time (s)] = 0.0
      sf = [4,5]
      size = (0.5, 0.5)
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    TextComponent text_2
      startVal [time (s)] = 1
      letterHeight = 0.1
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      text:
        Press 'up' if target is the same as original

        Press 'left' if target rotates to the left compared to the original

        Press 'right' if target rotates to the right compared to the original
    KeyboardComponent response
      correctAns = corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'left','right','up'
      startVal [time (s)] = 1
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Flow
  Routine instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = experiment matrix.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'gabor': 137.0, 'deviationAway': 2.0, 'conditions': 135, 'corrAns': u'right', 'match': 0.0},
      {'gabor': 138.0, 'deviationAway': 3.0, 'conditions': 135, 'corrAns': u'right', 'match': 0.0},
      {'gabor': 86.0, 'deviationAway': -4.0, 'conditions': 90, 'corrAns': u'left', 'match': 0.0},
      {'gabor': 0.0, 'deviationAway': 0.0, 'conditions': 0, 'corrAns': u'up', 'match': 1.0},
      {'gabor': 48.0, 'deviationAway': 3.0, 'conditions': 45, 'corrAns': u'right', 'match': 0.0},
      {'gabor': 140.0, 'deviationAway': 5.0, 'conditions': 135, 'corrAns': u'right', 'match': 0.0},
      {'gabor': 133.0, 'deviationAway': -2.0, 'conditions': 135, 'corrAns': u'left', 'match': 0.0},
      {'gabor': -2.0, 'deviationAway': -2.0, 'conditions': 0, 'corrAns': u'left', 'match': 0.0},
      {'gabor': 3.0, 'deviationAway': 3.0, 'conditions': 0, 'corrAns': u'right', 'match': 0.0},
      {'gabor': 0.0, 'deviationAway': 0.0, 'conditions': 0, 'corrAns': u'up', 'match': 1.0},
      {'gabor': 90.0, 'deviationAway': 0.0, 'conditions': 90, 'corrAns': u'up', 'match': 1.0},
      {'gabor': 2.0, 'deviationAway': 2.0, 'conditions': 0, 'corrAns': u'right', 'match': 0.0},
      {'gabor': 132.0, 'deviationAway': -3.0, 'conditions': 135, 'corrAns': u'left', 'match': 0.0},
      {'gabor': 131.0, 'deviationAway': -4.0, 'conditions': 135, 'corrAns': u'left', 'match': 0.0},
      {'gabor': -1.0, 'deviationAway': -1.0, 'conditions': 0, 'corrAns': u'left', 'match': 0.0},
      {'gabor': 136.0, 'deviationAway': 1.0, 'conditions': 135, 'corrAns': u'right', 'match': 0.0}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
    Routine experiment
  LoopTerminator trials
